PsychoPy2experiment version="2023.2.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1440, 900]
  expName = ERT1
  keyboardBackend = ioHub
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Routines
  Routine Welcome
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    TextComponent text
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Your baseline ECG recording has been recorded. You will now progress to the next part of the task.

        Hit any key to continue.
    KeyboardComponent key_resp_5
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      syncScreenRefresh = False
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  Routine Instructions
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    TextComponent text_2
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        In this task, you will see a fixation cross followed by a photograph of a face. Your task is to provide ratings of how trustworthy each face looks.

        Please answer as quickly and as accurately as possible. You will begin with a set of practice trials before moving on to the real task.

        When you are ready to proceed, press any key to continue. The practice trials will begin immediately.
    MouseComponent mouse
      forceEndRoutineOnPress = any click
      saveMouseState = on click
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine fixationcross2
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    ImageComponent fixationcross
      disabled = True
      image = Screen Shot 2024-04-08 at 3.33.49 PM.png
      saveStartStop = False
      size = (1.5, 1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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    TextComponent fixation
      letterHeight = 0.12
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text = +
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  Routine Blank_2
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    TextComponent text_4
      color = 0.0000, 0.0000, 0.0000
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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  Routine Trustworthiness_Rating
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    SliderComponent slider
      forceEndRoutine = True
      granularity = 0
      letterHeight = 0.05
      pos = (0, -0.4)
      saveStartStop = False
      size = (1.0, 0.1)
      startVal [time (s)] = 0.0
      styles = slider
      ticks = (1, 2, 3, 4, 5, 6, 7, 8, 9, 10)
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    TextComponent text_3
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = How trustworthy is this face?
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    TextComponent text_7
      letterHeight = 0.02
      pos = (-0.6, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        0
        (Not at all
        trustworthy)
    TextComponent text_8
      letterHeight = 0.02
      pos = (0.6, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        100
        (Extremely
        Trustworthy)
  Routine End_Message
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    TextComponent text_6
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Thank you for completing this task!

        You can now tell your experimenter you have completed the task. Press any key to terminate this window.
    KeyboardComponent key_resp_2
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine Instructions_2
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    TextComponent text_5
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        The practice trials are now complete. You will now begin the real task trials.

        When you are ready, press any key to continue. The first trial will begin immediately.
    KeyboardComponent key_resp_3
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine practicefaces_2
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    ImageComponent practicefaces
      image [set every repeat] = $Practice_Faces
      saveStartStop = False
      size = (0.5, 0.65)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
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  Routine TrialFaces
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    ImageComponent FaceStimuli
      image [set every repeat] = $Face_Stimuli
      saveStartStop = False
      size = (0.5, 0.65)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
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  Routine ecg_instructions
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    TextComponent text_9
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        The experiment begins with recording your ECG activity.

        Please do not move or speak during this time. Keep your feet flat on the ground, and keep your hands in your lap. If you have any questions for your experimenter, ask now.

        The recording will take 5 minutes, and the task will progress on its own once the 5 minutes are up.

        When you are ready to proceed, hit any key to continue.
    KeyboardComponent key_resp_4
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine routine_3
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    TextComponent text_10
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      text = 3...
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  Routine routine_2
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    TextComponent text_11
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = 2...
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  Routine routine_1
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    TextComponent text_12
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = 1...
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  Routine ecg_baseline
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    TextComponent text_13
      disabled = True
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300
      text = +
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  Routine start
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    TextComponent text_14
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text = Welcome to the experiment!
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Flow
  Routine start
  Routine ecg_instructions
  Routine routine_3
  Routine routine_2
  Routine routine_1
  Routine ecg_baseline
  Routine Welcome
  Routine Instructions
  LoopInitiator Practice loopType="TrialHandler"
    conditionsFile = Practice_Stimuli.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'Practice_Faces': 'Practice/066_y_m_n_a.jpg'},
      {'Practice_Faces': 'Practice/099_y_m_n_a.jpg'},
      {'Practice_Faces': 'Practice/153_y_m_n_a.jpg'},
      {'Practice_Faces': 'Practice/040_y_f_n_b.jpg'},
      {'Practice_Faces': 'Practice/106_y_f_n_a.jpg'},
      {'Practice_Faces': 'Practice/150_y_f_n_b.jpg'}]
    Routine fixationcross2
    Routine practicefaces_2
    Routine Blank_2
    Routine Trustworthiness_Rating
  LoopTerminator Practice
  Routine Instructions_2
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = Face_Stimuli.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'Face_Stimuli': 'Trustworthiness/081_y_m_n_a.jpg', 'Face_ID': '081_m', 'high_or_low_trust': 'low_m'},
      {'Face_Stimuli': 'Trustworthiness/160_y_m_n_b.jpg', 'Face_ID': '160_m', 'high_or_low_trust': 'low_m'},
      {'Face_Stimuli': 'Trustworthiness/167_y_m_n_b.jpg', 'Face_ID': '167_m', 'high_or_low_trust': 'low_m'},
      {'Face_Stimuli': 'Trustworthiness/057_y_m_n_a.jpg', 'Face_ID': '057_m', 'high_or_low_trust': 'low_m'},
      {'Face_Stimuli': 'Trustworthiness/162_y_f_n_a.jpg', 'Face_ID': '162_f', 'high_or_low_trust': 'low_f'},
      {'Face_Stimuli': 'Trustworthiness/034_y_f_n_a.jpg', 'Face_ID': '034_f', 'high_or_low_trust': 'low_f'},
      {'Face_Stimuli': 'Trustworthiness/020_y_f_n_a.jpg', 'Face_ID': '020_f', 'high_or_low_trust': 'low_f'},
      {'Face_Stimuli': 'Trustworthiness/101_y_f_n_a.jpg', 'Face_ID': '101_f', 'high_or_low_trust': 'low_f'},
      {'Face_Stimuli': 'Trustworthiness/123_y_m_n_a.jpg', 'Face_ID': '123_m', 'high_or_low_trust': 'high_m'},
      {'Face_Stimuli': 'Trustworthiness/008_y_m_n_b.jpg', 'Face_ID': '008_m', 'high_or_low_trust': 'high_m'},
      {'Face_Stimuli': 'Trustworthiness/119_y_m_n_b.jpg', 'Face_ID': '119_m', 'high_or_low_trust': 'high_m'},
      {'Face_Stimuli': 'Trustworthiness/016_y_m_n_b.jpg', 'Face_ID': '016_m', 'high_or_low_trust': 'high_m'},
      {'Face_Stimuli': 'Trustworthiness/048_y_f_n_a.jpg', 'Face_ID': '048_f', 'high_or_low_trust': 'high_f'},
      {'Face_Stimuli': 'Trustworthiness/182_y_f_n_a.jpg', 'Face_ID': '182_f', 'high_or_low_trust': 'high_f'}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
    Routine fixationcross2
    Routine TrialFaces
    Routine Blank_2
    Routine Trustworthiness_Rating
  LoopTerminator trials
  Routine End_Message
